PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = cm
  Window size (pixels) = [1366, 768]
  color = black
  expName = idk
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Routines
  Routine welcome_screen
    TextComponent welcome
      letterHeight = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      wrapWidth = 8
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      text:
        Welcome to the BiSiC keypad
    TextComponent instructions
      letterHeight = 0.6
      pos = (-1, -1)
      startVal [time (s)] = 1
      units = cm
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      text:
        Instructions

        1. After the crosshair, when the keypad is presented, stare at the intended button

        2. Try not to blink when the number is flashing

        3. When the flashing stops, the signals are decoded and the decoded button is actuated

        4. You may blink until the next crosshair.

        Please press a button to continue
    KeyboardComponent start_2
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine exp
    TextboxComponent textbox
      anchor = top-center
      bold = False
      borderColor = black
      color [set every frame] = black
      editable = True
      fillColor = white
      letterHeight = 0.75
      pos = (0, 10)
      size = (8, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text [set every repeat] = >>
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    ImageComponent i7
      image = Images\7.png
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*5*(frameN/60)))
      pos = (-3, 7)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      texture resolution = 256
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    ImageComponent i8
      image = Images\8.png
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*5.25*(frameN/60)))
      pos = (0, 7)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent i9
      image = Images\9.png
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*5.5*(frameN/60)))
      pos = (3, 7)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent i4
      image = Images\4.png
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*5.75*(frameN/60)))
      pos = (-3, 4)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent i5
      image = Images\5.png
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*6*(frameN/60)))
      pos = (0, 4)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent i6
      image = Images\6.png
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*6.25*(frameN/60)))
      pos = (3, 4)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent i1
      image = Images\1.png
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*6.5*(frameN/60)))
      pos = (-3, 1)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent i2
      image = Images\2.png
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*6.75*(frameN/60)))
      pos = (0, 1)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent i3
      image = Images\3.png
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*7*(frameN/60)))
      pos = (3, 1)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent idel
      image = Images\del.jpg
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*7.25*(frameN/60)))
      pos = (-3, -2)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent i0
      image = Images\0.png
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*7.5*(frameN/60)))
      pos = (0, -2)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    ImageComponent ienter
      image = Images\enter.jpg
      opacity [set every frame] = 1 if t < 2 else 0.5*(1+sin(2*pi*7.75*(frameN/60)))
      pos = (3, -2)
      size = (2, 2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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  Routine start_3
    TextComponent text
      letterHeight = 2.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine textbox_2
Flow
  Routine welcome_screen
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 50
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    Routine start_3
    Routine exp
  LoopTerminator trials
